synapse stdp_test:
  state:
    w real = 1.0 @nest::weight
    #pre_trace real = 0.
    #post_trace real = 0.

  end
  parameters:
    the_delay ms = 1ms @nest::delay # !!! cannot have a variable called "delay"
    lambda real = 0.01
    tau_tr_pre ms = 20ms
    tau_tr_post ms = 20ms
    alpha real = 1
    mu_plus real = 1
    mu_minus real = 1
    Wmax real = 100.0
    Wmin real = 0.0
  end
  equations:
    kernel pre_trace_kernel = exp(-t / tau_tr_pre)
    inline pre_trace real = convolve(pre_trace_kernel,pre_spikes)
    # all-to-all trace of postsynaptic neuron
    kernel post_trace_kernel = exp(-t / tau_tr_post)
    inline post_trace real = convolve(post_trace_kernel,post_spikes)
  end

  input:
    pre_spikes nS <-spike
    post_spikes nS <-spike
  end

  output: spike

  onReceive(post_spikes):
    # potentiate synapse
    w_ real = Wmax * (w / Wmax + (lambda * (1.0 - (w / Wmax)) ** mu_plus * pre_trace))
    w = min(Wmax,w_)
  end

  onReceive(pre_spikes):
    # depress synapse
    w_ real = Wmax * (w / Wmax - (alpha * lambda * (w / Wmax) ** mu_minus * post_trace))
    w = max(Wmin,w_)
    # deliver spike to postsynaptic partner
    deliver_spike(w,the_delay)
  end

end